//   FILE :  chang_model_1999.xml
//
// CREATED :  20th January 2003
//
// LAST MODIFIED : 9th April 2003
//
// AUTHOR :  Catherine Lloyd
//           The Bioengineering Institute
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the 16/01/2002 CellML Metadata 1.0 Specification.
//
// DESCRIPTION :  This file contains a CellML description of Chang and Fujita's 1999 kinetic model of the thiazide-sensitive Na-Cl cotransporter of the renal distal tubule.
//
// CHANGES:
//   09/04/2003 - AAC - Added publication date information.
// publisher: The University of Auckland, Bioengineering Institute
// modification: W3CDTF 2003-04-09; Added publication date information.; Given Autumn; Family Cuellar; Other A
// created: W3CDTF 2003-01-20
// creator: Orgname The University of Auckland; Orgunit The Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// title: Chang and Fujita's 1999 kinetic model of the thiazide-sensitive Na-Cl cotransporter of the renal distal tubule.
// bio_entity: Renal Distal Tubule
// comment: FN Catherine Lloyd; This is the CellML description of Chang and Fujita's 1999 kinetic model of the thiazide-sensitive Na-Cl cotransporter of the renal distal tubule.
// reference: subject_type keyword; kidney; electrophysiology
// reference: Pubmed_id 10362783; Given Hangil; Family Chang; Given Toshiro; Family Fujita; title A kinetic model of the thiazide-sensitive Na-Cl cotransporter; volume 276; first_page F952; title American Journal of Physiology; W3CDTF 1999-06; last_page F959
def model chang_fujita_1999_version01 as
  // A Kinetic Model of the Thiazide-Sensitive Na-Cl Cotransporter
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This is the original unchecked version of the model imported from the previous CellML model repository, 24-Jan-2006.
  //
  // Model Structure
  //
  // The thiazide-sensitive Na-Cl cotransporter (TSC) is a transmembrane protein, which is embedded in the luminal plasma membrane of the epithelial cells, which line the renal distal tubule. Na+ and Ca2+ transmembrane exchange mediated by TSC is blocked by the diuretic drug thiazide. The physiological importance of TSC in maintaining a sodium balance can be highlighted by the efficacy of thiazide in treating hypertension. In addition, genetic defects in TSC disrupt electrolyte metabolism in a condition known as Gitelman's syndrome.
  //
  // Experimental studies have shown that thiazides have a high affinity to TSC, and that the drug-transporter binding can be inhibited or enhanced by the presence of chloride or sodium respectively. To describe the mechanisms underlying these observations, Fanestil et al. (1988, 1991) developed a mathematical model of TSC. In this model, TSC had two bindings sites, one that was selective for sodium and one which showed an affinity for both chloride and thiazide (competitive inhibition arises when both substances are present). Sodium binding increases the affinity of the second site for thiazide.
  //
  // Direct measurement of sodium influx through TSC expressed in Xenopus laevis oocytes has shown that sodium influx is a saturable process. This is consistent with a carrier-mediated mechanism cotransporting sodium and chloride with a 1:1 stoichiometry.
  //
  // In 1999, Hangil Chang and Toshiro Fujita published a numerical model of TSC that can predict the kinetics of thiazide binding and substrate transport of TSC (see below). Based on the previously published Fanestil et al. model, Chang and Fujita developed a state diagram in which the TSC has two binding sites, one for sodium and one for chloride. However, unlike the Fanestil model, thiazide binding is possible from both the intra- and extracellular sides of the plasma membrane. Model simulations supported experimental data, and Chang and Fujita concluded that known kinetic properties of TSC can be predicted by a model which is based on a state diagram.
  //
  // The complete original paper reference is cited below:
  //
  // A kinetic model of the thiazide-sensitive Na-Cl cotransporter (http://ajprenal.physiology.org/cgi/content/abstract/276/6/F952), Hangil Chang and Toshiro Fujita, 1999, American Journal of Physiology (http://ajprenal.physiology.org/), 276, F952-F959. (PDF (http://ajprenal.physiology.org/cgi/reprint/276/6/F952.pdf) and full text (http://ajprenal.physiology.org/cgi/content/full/276/6/F952) versions of the article are available to subscribers on the journal website.) PubMed ID: 10362783 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=10362783&dopt=Abstract)
  //
  // The raw CellML description of the model can be downloaded in various formats as described in
  //
  // diagram of the model
  //
  // State diagram for the thiazide-sensitive Na-Cl cotransporter (TSC). Transporter (E) has binding sites for sodium (Na ) and chloride (Cl). Thiazide diuretics (D) compete with chloride for the same binding site. _i is used to indicate which symbols belong to the intracellular side.
  // Below, we define some additional units for association with variables and
  // constants within the model.
  def unit millimolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit flux as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit second {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  // The "environment" component is used to declare variables that are used by
  // all or most of the other components, in this case just "time".

  def comp environment as
    var time: second {pub: out};
  enddef;
  // The following components describe all the transporters, reactants and
  // products involved in the reactions.

  def comp E as
    var E: millimolar {pub: out};
    var delta_E_rxn1: flux {pub: in};
    var delta_E_rxn2: flux {pub: in};
    var delta_E_rxn12: flux {pub: in};
    var delta_E_rxn9: flux {pub: in};
    var time: second {pub: in};
    ode(E, time) = delta_E_rxn1+delta_E_rxn2+delta_E_rxn12+delta_E_rxn9;
  enddef;

  def comp E_i as
    var E_i: millimolar {pub: out};
    var delta_E_i_rxn5: flux {pub: in};
    var delta_E_i_rxn6: flux {pub: in};
    var delta_E_i_rxn9: flux {pub: in};
    var delta_E_i_rxn15: flux {pub: in};
    var time: second {pub: in};
    ode(E_i, time) = delta_E_i_rxn5+delta_E_i_rxn6+delta_E_i_rxn9+delta_E_i_rxn15;
  enddef;

  def comp ED as
    var ED: millimolar {pub: out};
    var delta_ED_rxn11: flux {pub: in};
    var delta_ED_rxn12: flux {pub: in};
    var time: second {pub: in};
    ode(ED, time) = delta_ED_rxn11+delta_ED_rxn12;
  enddef;

  def comp ED_i as
    var ED_i: millimolar {pub: out};
    var delta_ED_i_rxn14: flux {pub: in};
    var delta_ED_i_rxn15: flux {pub: in};
    var time: second {pub: in};
    ode(ED_i, time) = delta_ED_i_rxn14+delta_ED_i_rxn15;
  enddef;

  def comp ENaD as
    var ENaD: millimolar {pub: out};
    var delta_ENaD_rxn11: flux {pub: in};
    var delta_ENaD_rxn13: flux {pub: in};
    var time: second {pub: in};
    ode(ENaD, time) = delta_ENaD_rxn11+delta_ENaD_rxn13;
  enddef;

  def comp ENaD_i as
    var ENaD_i: millimolar {pub: out};
    var delta_ENaD_i_rxn14: flux {pub: in};
    var delta_ENaD_i_rxn16: flux {pub: in};
    var time: second {pub: in};
    ode(ENaD_i, time) = delta_ENaD_i_rxn14+delta_ENaD_i_rxn16;
  enddef;

  def comp ENa as
    var ENa: millimolar {pub: out};
    var delta_ENa_rxn1: flux {pub: in};
    var delta_ENa_rxn3: flux {pub: in};
    var delta_ENa_rxn13: flux {pub: in};
    var time: second {pub: in};
    ode(ENa, time) = delta_ENa_rxn1+delta_ENa_rxn3+delta_ENa_rxn13;
  enddef;

  def comp ENa_i as
    var ENa_i: millimolar {pub: out};
    var delta_ENa_i_rxn5: flux {pub: in};
    var delta_ENa_i_rxn7: flux {pub: in};
    var delta_ENa_i_rxn16: flux {pub: in};
    var time: second {pub: in};
    ode(ENa_i, time) = delta_ENa_i_rxn5+delta_ENa_i_rxn7+delta_ENa_i_rxn16;
  enddef;

  def comp ECl as
    var ECl: millimolar {pub: out};
    var delta_ECl_rxn2: flux {pub: in};
    var delta_ECl_rxn4: flux {pub: in};
    var time: second {pub: in};
    ode(ECl, time) = delta_ECl_rxn2+delta_ECl_rxn4;
  enddef;

  def comp ECl_i as
    var ECl_i: millimolar {pub: out};
    var delta_ECl_i_rxn6: flux {pub: in};
    var delta_ECl_i_rxn8: flux {pub: in};
    var time: second {pub: in};
    ode(ECl_i, time) = delta_ECl_i_rxn6+delta_ECl_i_rxn8;
  enddef;

  def comp ENaCl as
    var ENaCl: millimolar {pub: out};
    var delta_ENaCl_rxn3: flux {pub: in};
    var delta_ENaCl_rxn4: flux {pub: in};
    var delta_ENaCl_rxn10: flux {pub: in};
    var time: second {pub: in};
    ode(ENaCl, time) = delta_ENaCl_rxn3+delta_ENaCl_rxn4+delta_ENaCl_rxn10;
  enddef;

  def comp ENaCl_i as
    var ENaCl_i: millimolar {pub: out};
    var delta_ENaCl_i_rxn7: flux {pub: in};
    var delta_ENaCl_i_rxn8: flux {pub: in};
    var delta_ENaCl_i_rxn10: flux {pub: in};
    var time: second {pub: in};
    ode(ENaCl_i, time) = delta_ENaCl_i_rxn7+delta_ENaCl_i_rxn8+delta_ENaCl_i_rxn10;
  enddef;

  def comp Na as
    var Na: millimolar {pub: out};
    var delta_Na_rxn1: flux {pub: in};
    var delta_Na_rxn4: flux {pub: in};
    var delta_Na_rxn11: flux {pub: in};
    var time: second {pub: in};
    ode(Na, time) = delta_Na_rxn1+delta_Na_rxn4+delta_Na_rxn11;
  enddef;

  def comp Na_i as
    var Na_i: millimolar {pub: out};
    var delta_Na_i_rxn8: flux {pub: in};
    var delta_Na_i_rxn14: flux {pub: in};
    var delta_Na_i_rxn5: flux {pub: in};
    var time: second {pub: in};
    ode(Na_i, time) = delta_Na_i_rxn5+delta_Na_i_rxn8+delta_Na_i_rxn14;
  enddef;

  def comp Cl as
    var Cl: millimolar {pub: out};
    var delta_Cl_rxn2: flux {pub: in};
    var delta_Cl_rxn3: flux {pub: in};
    var time: second {pub: in};
    ode(Cl, time) = delta_Cl_rxn2+delta_Cl_rxn3;
  enddef;

  def comp Cl_i as
    var Cl_i: millimolar {pub: out};
    var delta_Cl_i_rxn6: flux {pub: in};
    var delta_Cl_i_rxn7: flux {pub: in};
    var time: second {pub: in};
    ode(Cl_i, time) = delta_Cl_i_rxn6+delta_Cl_i_rxn7;
  enddef;

  def comp D as
    var D: millimolar {pub: out};
    var delta_D_rxn12: flux {pub: in};
    var delta_D_rxn13: flux {pub: in};
    var time: second {pub: in};
    ode(D, time) = delta_D_rxn12+delta_D_rxn13;
  enddef;

  def comp D_i as
    var D_i: millimolar {pub: out};
    var delta_D_i_rxn16: flux {pub: in};
    var delta_D_i_rxn15: flux {pub: in};
    var time: second {pub: in};
    ode(D_i, time) = delta_D_i_rxn16+delta_D_i_rxn15;
  enddef;
  // The following components describe the reactions of the model.

  def comp reaction1 as
    var E: millimolar {pub: in};
    var Na: millimolar {pub: in};
    var ENa: millimolar {pub: in};
    var k1: second_order_rate_constant {init: 1.0E8};
    var k1_: first_order_rate_constant {init: 4.183E5};
    var delta_E_rxn1: flux {pub: out};
    var delta_Na_rxn1: flux {pub: out};
    var delta_ENa_rxn1: flux {pub: out};
    var rate: flux;
    reaction {reversible: yes}
      variable_ref {variable: E}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_E_rxn1, role: reactant}
      variable_ref {variable: Na}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_Na_rxn1, role: reactant}
      variable_ref {variable: ENa}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_ENa_rxn1, role: product}
      variable_ref {variable: rate}
        role {role: rate}
          rate = k1*E*Na+(-(k1_*ENa));
  enddef;

  def comp reaction2 as
    var E: millimolar {pub: in};
    var Cl: millimolar {pub: in};
    var ECl: millimolar {pub: in};
    var k2: second_order_rate_constant {init: 1.0E8};
    var k2_: first_order_rate_constant {init: 4.928E6};
    var delta_E_rxn2: flux {pub: out};
    var delta_Cl_rxn2: flux {pub: out};
    var delta_ECl_rxn2: flux {pub: out};
    var rate: flux;
    reaction {reversible: yes}
      variable_ref {variable: E}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_E_rxn2, role: reactant}
      variable_ref {variable: Cl}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_Cl_rxn2, role: reactant}
      variable_ref {variable: ECl}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_ECl_rxn2, role: product}
      variable_ref {variable: rate}
        role {role: rate}
          rate = k2*E*Cl+(-(k2_*ECl));
  enddef;

  def comp reaction3 as
    var ENa: millimolar {pub: in};
    var Cl: millimolar {pub: in};
    var ENaCl: millimolar {pub: in};
    var k3: second_order_rate_constant {init: 1.0E8};
    var k3_: first_order_rate_constant {init: 1.065E6};
    var delta_ENa_rxn3: flux {pub: out};
    var delta_Cl_rxn3: flux {pub: out};
    var delta_ENaCl_rxn3: flux {pub: out};
    var rate: flux;
    reaction {reversible: yes}
      variable_ref {variable: ENa}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_ENa_rxn3, role: reactant}
      variable_ref {variable: Cl}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_Cl_rxn3, role: reactant}
      variable_ref {variable: ENaCl}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_ENaCl_rxn3, role: product}
      variable_ref {variable: rate}
        role {role: rate}
          rate = k3*ENa*Cl+(-(k3_*ENaCl));
  enddef;

  def comp reaction4 as
    var ECl: millimolar {pub: in};
    var Na: millimolar {pub: in};
    var ENaCl: millimolar {pub: in};
    var k4: second_order_rate_constant {init: 1.0E8};
    var k4_: first_order_rate_constant {init: 8.940E4};
    var delta_ECl_rxn4: flux {pub: out};
    var delta_Na_rxn4: flux {pub: out};
    var delta_ENaCl_rxn4: flux {pub: out};
    var rate: flux;
    reaction {reversible: yes}
      variable_ref {variable: ECl}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_ECl_rxn4, role: reactant}
      variable_ref {variable: Na}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_Na_rxn4, role: reactant}
      variable_ref {variable: ENaCl}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_ENaCl_rxn4, role: product}
      variable_ref {variable: rate}
        role {role: rate}
          rate = k4*ECl*Na+(-(k4_*ENaCl));
  enddef;

  def comp reaction5 as
    var E_i: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var ENa_i: millimolar {pub: in};
    var k5: second_order_rate_constant {init: 1.0E8};
    var k5_: first_order_rate_constant {init: 4.183E5};
    var delta_E_i_rxn5: flux {pub: out};
    var delta_Na_i_rxn5: flux {pub: out};
    var delta_ENa_i_rxn5: flux {pub: out};
    var rate: flux;
    reaction {reversible: yes}
      variable_ref {variable: E_i}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_E_i_rxn5, role: reactant}
      variable_ref {variable: Na_i}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_Na_i_rxn5, role: reactant}
      variable_ref {variable: ENa_i}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_ENa_i_rxn5, role: product}
      variable_ref {variable: rate}
        role {role: rate}
          rate = k5*E_i*Na_i+(-(k5_*ENa_i));
  enddef;

  def comp reaction6 as
    var E_i: millimolar {pub: in};
    var Cl_i: millimolar {pub: in};
    var ECl_i: millimolar {pub: in};
    var k6: second_order_rate_constant {init: 1.0E8};
    var k6_: first_order_rate_constant {init: 4.982E6};
    var delta_E_i_rxn6: flux {pub: out};
    var delta_Cl_i_rxn6: flux {pub: out};
    var delta_ECl_i_rxn6: flux {pub: out};
    var rate: flux;
    reaction {reversible: yes}
      variable_ref {variable: E_i}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_E_i_rxn6, role: reactant}
      variable_ref {variable: Cl_i}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_Cl_i_rxn6, role: reactant}
      variable_ref {variable: ECl_i}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_ECl_i_rxn6, role: product}
      variable_ref {variable: rate}
        role {role: rate}
          rate = k6*E_i*Cl_i+(-(k6_*ECl_i));
  enddef;

  def comp reaction7 as
    var ENa_i: millimolar {pub: in};
    var Cl_i: millimolar {pub: in};
    var ENaCl_i: millimolar {pub: in};
    var k7: second_order_rate_constant {init: 1.0E8};
    var k7_: first_order_rate_constant {init: 1.065E6};
    var delta_ENa_i_rxn7: flux {pub: out};
    var delta_Cl_i_rxn7: flux {pub: out};
    var delta_ENaCl_i_rxn7: flux {pub: out};
    var rate: flux;
    reaction {reversible: yes}
      variable_ref {variable: ENa_i}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_ENa_i_rxn7, role: reactant}
      variable_ref {variable: Cl_i}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_Cl_i_rxn7, role: reactant}
      variable_ref {variable: ENaCl_i}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_ENaCl_i_rxn7, role: product}
      variable_ref {variable: rate}
        role {role: rate}
          rate = k7*ENa_i*Cl_i+(-(k7_*ENaCl_i));
  enddef;

  def comp reaction8 as
    var ECl_i: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var ENaCl_i: millimolar {pub: in};
    var k8: second_order_rate_constant {init: 1.0E8};
    var k8_: first_order_rate_constant {init: 8.940E4};
    var delta_ECl_i_rxn8: flux {pub: out};
    var delta_Na_i_rxn8: flux {pub: out};
    var delta_ENaCl_i_rxn8: flux {pub: out};
    var rate: flux;
    reaction {reversible: yes}
      variable_ref {variable: ECl_i}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_ECl_i_rxn8, role: reactant}
      variable_ref {variable: Na_i}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_Na_i_rxn8, role: reactant}
      variable_ref {variable: ENaCl_i}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_ENaCl_i_rxn8, role: product}
      variable_ref {variable: rate}
        role {role: rate}
          rate = k8*ECl_i*Na_i+(-(k8_*ENaCl_i));
  enddef;

  def comp reaction9 as
    var E: millimolar {pub: in};
    var E_i: millimolar {pub: in};
    var k9: first_order_rate_constant {init: 4.587E5};
    var k9_: first_order_rate_constant {init: 1.0E5};
    var delta_E_i_rxn9: flux {pub: out};
    var delta_E_rxn9: flux {pub: out};
    var rate: flux;
    reaction {reversible: yes}
      variable_ref {variable: E}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_E_rxn9, role: reactant}
      variable_ref {variable: E_i}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_E_i_rxn9, role: product}
      variable_ref {variable: rate}
        role {role: rate}
          rate = k9*E+(-(k9_*E_i));
  enddef;

  def comp reaction10 as
    var ENaCl: millimolar {pub: in};
    var ENaCl_i: millimolar {pub: in};
    var k10: first_order_rate_constant {init: 1.0E3};
    var k10_: first_order_rate_constant {init: 2.180E2};
    var delta_ENaCl_i_rxn10: flux {pub: out};
    var delta_ENaCl_rxn10: flux {pub: out};
    var rate: flux;
    reaction {reversible: yes}
      variable_ref {variable: ENaCl}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_ENaCl_rxn10, role: reactant}
      variable_ref {variable: ENaCl_i}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_ENaCl_i_rxn10, role: product}
      variable_ref {variable: rate}
        role {role: rate}
          rate = k10*ENaCl+(-(k10_*ENaCl_i));
  enddef;

  def comp reaction11 as
    var ED: millimolar {pub: in};
    var Na: millimolar {pub: in};
    var ENaD: millimolar {pub: in};
    var k11: second_order_rate_constant {init: 1.0E8};
    var k11_: first_order_rate_constant {init: 4.183E5};
    var delta_ED_rxn11: flux {pub: out};
    var delta_Na_rxn11: flux {pub: out};
    var delta_ENaD_rxn11: flux {pub: out};
    var rate: flux;
    reaction {reversible: yes}
      variable_ref {variable: ED}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_ED_rxn11, role: reactant}
      variable_ref {variable: Na}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_Na_rxn11, role: reactant}
      variable_ref {variable: ENaD}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_ENaD_rxn11, role: product}
      variable_ref {variable: rate}
        role {role: rate}
          rate = k11*ED*Na+(-(k11_*ENaD));
  enddef;

  def comp reaction12 as
    var E: millimolar {pub: in};
    var D: millimolar {pub: in};
    var ED: millimolar {pub: in};
    var k12: second_order_rate_constant {init: 1.0E8};
    var k12_: first_order_rate_constant {init: 3.192E1};
    var delta_E_rxn12: flux {pub: out};
    var delta_D_rxn12: flux {pub: out};
    var delta_ED_rxn12: flux {pub: out};
    var rate: flux;
    reaction {reversible: yes}
      variable_ref {variable: E}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_E_rxn12, role: reactant}
      variable_ref {variable: D}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_D_rxn12, role: reactant}
      variable_ref {variable: ED}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_ED_rxn12, role: product}
      variable_ref {variable: rate}
        role {role: rate}
          rate = k12*E*D+(-(k12_*ED));
  enddef;

  def comp reaction13 as
    var ENa: millimolar {pub: in};
    var D: millimolar {pub: in};
    var ENaD: millimolar {pub: in};
    var k13: second_order_rate_constant {init: 1.0E8};
    var k13_: first_order_rate_constant {init: 3.192E1};
    var delta_ENa_rxn13: flux {pub: out};
    var delta_D_rxn13: flux {pub: out};
    var delta_ENaD_rxn13: flux {pub: out};
    var rate: flux;
    reaction {reversible: yes}
      variable_ref {variable: ENa}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_ENa_rxn13, role: reactant}
      variable_ref {variable: D}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_D_rxn13, role: reactant}
      variable_ref {variable: ENaD}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_ENaD_rxn13, role: product}
      variable_ref {variable: rate}
        role {role: rate}
          rate = k13*ENa*D+(-(k13_*ENaD));
  enddef;

  def comp reaction14 as
    var ED_i: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var ENaD_i: millimolar {pub: in};
    var k14: second_order_rate_constant {init: 1.0E8};
    var k14_: first_order_rate_constant {init: 1.389E5};
    var delta_ED_i_rxn14: flux {pub: out};
    var delta_Na_i_rxn14: flux {pub: out};
    var delta_ENaD_i_rxn14: flux {pub: out};
    var rate: flux;
    reaction {reversible: yes}
      variable_ref {variable: ED_i}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_ED_i_rxn14, role: reactant}
      variable_ref {variable: Na_i}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_Na_i_rxn14, role: reactant}
      variable_ref {variable: ENaD_i}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_ENaD_i_rxn14, role: product}
      variable_ref {variable: rate}
        role {role: rate}
          rate = k14*ED_i*Na_i+(-(k14_*ENaD_i));
  enddef;

  def comp reaction15 as
    var E_i: millimolar {pub: in};
    var D_i: millimolar {pub: in};
    var ED_i: millimolar {pub: in};
    var k15: second_order_rate_constant {init: 1.0E8};
    var k15_: first_order_rate_constant {init: 3.514E-1};
    var delta_E_i_rxn15: flux {pub: out};
    var delta_D_i_rxn15: flux {pub: out};
    var delta_ED_i_rxn15: flux {pub: out};
    var rate: flux;
    reaction {reversible: yes}
      variable_ref {variable: E_i}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_E_i_rxn15, role: reactant}
      variable_ref {variable: D_i}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_D_i_rxn15, role: reactant}
      variable_ref {variable: ED_i}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_ED_i_rxn15, role: product}
      variable_ref {variable: rate}
        role {role: rate}
          rate = k15*E_i*D_i+(-(k15_*ED_i));
  enddef;

  def comp reaction16 as
    var ENa_i: millimolar {pub: in};
    var D_i: millimolar {pub: in};
    var ENaD_i: millimolar {pub: in};
    var k16: second_order_rate_constant {init: 1.0E8};
    var k16_: first_order_rate_constant {init: 1.166E-1};
    var delta_ENa_i_rxn16: flux {pub: out};
    var delta_D_i_rxn16: flux {pub: out};
    var delta_ENaD_i_rxn16: flux {pub: out};
    var rate: flux;
    reaction {reversible: yes}
      variable_ref {variable: ENa_i}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_ENa_i_rxn16, role: reactant}
      variable_ref {variable: D_i}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_D_i_rxn16, role: reactant}
      variable_ref {variable: ENaD_i}
        role {stoichiometry: 1, direction: forward, delta_variable: delta_ENaD_i_rxn16, role: product}
      variable_ref {variable: rate}
        role {role: rate}
          rate = k16*ENa_i*D_i+(-(k16_*ENaD_i));
  enddef;
  def map between E and environment for
    vars time and time;
  enddef;
  def map between E_i and environment for
    vars time and time;
  enddef;
  def map between Na and environment for
    vars time and time;
  enddef;
  def map between Na_i and environment for
    vars time and time;
  enddef;
  def map between Cl and environment for
    vars time and time;
  enddef;
  def map between Cl_i and environment for
    vars time and time;
  enddef;
  def map between D and environment for
    vars time and time;
  enddef;
  def map between D_i and environment for
    vars time and time;
  enddef;
  def map between ENa and environment for
    vars time and time;
  enddef;
  def map between ENa_i and environment for
    vars time and time;
  enddef;
  def map between ED and environment for
    vars time and time;
  enddef;
  def map between ED_i and environment for
    vars time and time;
  enddef;
  def map between ECl and environment for
    vars time and time;
  enddef;
  def map between ECl_i and environment for
    vars time and time;
  enddef;
  def map between ENaD and environment for
    vars time and time;
  enddef;
  def map between ENaD_i and environment for
    vars time and time;
  enddef;
  def map between ENaCl and environment for
    vars time and time;
  enddef;
  def map between ENaCl_i and environment for
    vars time and time;
  enddef;
  def map between E and reaction1 for
    vars E and E;
    vars delta_E_rxn1 and delta_E_rxn1;
  enddef;
  def map between Na and reaction1 for
    vars Na and Na;
    vars delta_Na_rxn1 and delta_Na_rxn1;
  enddef;
  def map between ENa and reaction1 for
    vars ENa and ENa;
    vars delta_ENa_rxn1 and delta_ENa_rxn1;
  enddef;
  def map between E and reaction2 for
    vars E and E;
    vars delta_E_rxn2 and delta_E_rxn2;
  enddef;
  def map between Cl and reaction2 for
    vars Cl and Cl;
    vars delta_Cl_rxn2 and delta_Cl_rxn2;
  enddef;
  def map between ECl and reaction2 for
    vars ECl and ECl;
    vars delta_ECl_rxn2 and delta_ECl_rxn2;
  enddef;
  def map between ENa and reaction3 for
    vars ENa and ENa;
    vars delta_ENa_rxn3 and delta_ENa_rxn3;
  enddef;
  def map between Cl and reaction3 for
    vars Cl and Cl;
    vars delta_Cl_rxn3 and delta_Cl_rxn3;
  enddef;
  def map between ENaCl and reaction3 for
    vars ENaCl and ENaCl;
    vars delta_ENaCl_rxn3 and delta_ENaCl_rxn3;
  enddef;
  def map between ECl and reaction4 for
    vars ECl and ECl;
    vars delta_ECl_rxn4 and delta_ECl_rxn4;
  enddef;
  def map between Na and reaction4 for
    vars Na and Na;
    vars delta_Na_rxn4 and delta_Na_rxn4;
  enddef;
  def map between ENaCl and reaction4 for
    vars ENaCl and ENaCl;
    vars delta_ENaCl_rxn4 and delta_ENaCl_rxn4;
  enddef;
  def map between E_i and reaction5 for
    vars E_i and E_i;
    vars delta_E_i_rxn5 and delta_E_i_rxn5;
  enddef;
  def map between Na_i and reaction5 for
    vars Na_i and Na_i;
    vars delta_Na_i_rxn5 and delta_Na_i_rxn5;
  enddef;
  def map between ENa_i and reaction5 for
    vars ENa_i and ENa_i;
    vars delta_ENa_i_rxn5 and delta_ENa_i_rxn5;
  enddef;
  def map between E_i and reaction6 for
    vars E_i and E_i;
    vars delta_E_i_rxn6 and delta_E_i_rxn6;
  enddef;
  def map between Cl_i and reaction6 for
    vars Cl_i and Cl_i;
    vars delta_Cl_i_rxn6 and delta_Cl_i_rxn6;
  enddef;
  def map between ECl_i and reaction6 for
    vars ECl_i and ECl_i;
    vars delta_ECl_i_rxn6 and delta_ECl_i_rxn6;
  enddef;
  def map between ENa_i and reaction7 for
    vars ENa_i and ENa_i;
    vars delta_ENa_i_rxn7 and delta_ENa_i_rxn7;
  enddef;
  def map between Cl_i and reaction7 for
    vars Cl_i and Cl_i;
    vars delta_Cl_i_rxn7 and delta_Cl_i_rxn7;
  enddef;
  def map between ENaCl_i and reaction7 for
    vars ENaCl_i and ENaCl_i;
    vars delta_ENaCl_i_rxn7 and delta_ENaCl_i_rxn7;
  enddef;
  def map between ECl_i and reaction8 for
    vars ECl_i and ECl_i;
    vars delta_ECl_i_rxn8 and delta_ECl_i_rxn8;
  enddef;
  def map between ENaCl_i and reaction8 for
    vars ENaCl_i and ENaCl_i;
    vars delta_ENaCl_i_rxn8 and delta_ENaCl_i_rxn8;
  enddef;
  def map between Na_i and reaction8 for
    vars Na_i and Na_i;
    vars delta_Na_i_rxn8 and delta_Na_i_rxn8;
  enddef;
  def map between E and reaction9 for
    vars E and E;
    vars delta_E_rxn9 and delta_E_rxn9;
  enddef;
  def map between E_i and reaction9 for
    vars E_i and E_i;
    vars delta_E_i_rxn9 and delta_E_i_rxn9;
  enddef;
  def map between ENaCl and reaction10 for
    vars ENaCl and ENaCl;
    vars delta_ENaCl_rxn10 and delta_ENaCl_rxn10;
  enddef;
  def map between ENaCl_i and reaction10 for
    vars ENaCl_i and ENaCl_i;
    vars delta_ENaCl_i_rxn10 and delta_ENaCl_i_rxn10;
  enddef;
  def map between ED and reaction11 for
    vars ED and ED;
    vars delta_ED_rxn11 and delta_ED_rxn11;
  enddef;
  def map between Na and reaction11 for
    vars Na and Na;
    vars delta_Na_rxn11 and delta_Na_rxn11;
  enddef;
  def map between ENaD and reaction11 for
    vars ENaD and ENaD;
    vars delta_ENaD_rxn11 and delta_ENaD_rxn11;
  enddef;
  def map between E and reaction12 for
    vars E and E;
    vars delta_E_rxn12 and delta_E_rxn12;
  enddef;
  def map between D and reaction12 for
    vars D and D;
    vars delta_D_rxn12 and delta_D_rxn12;
  enddef;
  def map between ED and reaction12 for
    vars ED and ED;
    vars delta_ED_rxn12 and delta_ED_rxn12;
  enddef;
  def map between ENa and reaction13 for
    vars ENa and ENa;
    vars delta_ENa_rxn13 and delta_ENa_rxn13;
  enddef;
  def map between D and reaction13 for
    vars D and D;
    vars delta_D_rxn13 and delta_D_rxn13;
  enddef;
  def map between ENaD and reaction13 for
    vars ENaD and ENaD;
    vars delta_ENaD_rxn13 and delta_ENaD_rxn13;
  enddef;
  def map between ED_i and reaction14 for
    vars ED_i and ED_i;
    vars delta_ED_i_rxn14 and delta_ED_i_rxn14;
  enddef;
  def map between Na_i and reaction14 for
    vars Na_i and Na_i;
    vars delta_Na_i_rxn14 and delta_Na_i_rxn14;
  enddef;
  def map between ENaD_i and reaction14 for
    vars ENaD_i and ENaD_i;
    vars delta_ENaD_i_rxn14 and delta_ENaD_i_rxn14;
  enddef;
  def map between E_i and reaction15 for
    vars E_i and E_i;
    vars delta_E_i_rxn15 and delta_E_i_rxn15;
  enddef;
  def map between D_i and reaction15 for
    vars D_i and D_i;
    vars delta_D_i_rxn15 and delta_D_i_rxn15;
  enddef;
  def map between ED_i and reaction15 for
    vars ED_i and ED_i;
    vars delta_ED_i_rxn15 and delta_ED_i_rxn15;
  enddef;
  def map between ENa_i and reaction16 for
    vars ENa_i and ENa_i;
    vars delta_ENa_i_rxn16 and delta_ENa_i_rxn16;
  enddef;
  def map between D_i and reaction16 for
    vars D_i and D_i;
    vars delta_D_i_rxn16 and delta_D_i_rxn16;
  enddef;
  def map between ENaD_i and reaction16 for
    vars ENaD_i and ENaD_i;
    vars delta_ENaD_i_rxn16 and delta_ENaD_i_rxn16;
  enddef;
enddef;
// http://www.cellml.org/models/D
// alternative: Extracellular Thiazide Diuretics
// title: D
// http://www.cellml.org/models/E
// alternative: Extracellular Transporter
// title: E
// http://www.cellml.org/models/ENa_i
// alternative: Intracellular Transporter-Sodium Complex
// title: ENa_i
// http://www.cellml.org/models/Cl
// alternative: Extracellular Chloride
// title: Cl
// http://www.cellml.org/models/ENaD_i
// alternative: Intracellular Transporter-Thiazide Diuretics-Sodium Complex
// title: ENaD_i
// http://www.cellml.org/models/ED
// alternative: Extracellular Transporter-Thiazide Diuretics Complex
// title: ED
// http://www.cellml.org/models/ENaCl
// alternative: Extracellular Transporter-Sodium-Chloride Complex
// title: ENaCl
// http://www.cellml.org/models/ENaD
// alternative: Extracellular Transporter-Thiazide Diuretics-Sodium Complex
// title: ENaD
// http://www.cellml.org/models/Na_i
// alternative: Intracellular Sodium
// title: Na_i
// http://www.cellml.org/models/ECl
// alternative: Extracellular Transporter-Chloride Complex
// title: ECl
// http://www.cellml.org/models/ECl_i
// alternative: Intracellular Transporter-Chloride Complex
// title: ECl_i
// http://www.cellml.org/models/D_i
// alternative: Intracellular Thiazide Diuretics
// title: D_i
// http://www.cellml.org/models/E_i
// alternative: Intracellular Transporter
// title: E_i
// http://www.cellml.org/models/ED_i
// alternative: Intracellular Transporter-Thiazide Diuretics Complex
// title: ED_i
// http://www.cellml.org/models/Cl_i
// alternative: Intracellular Chloride
// title: Cl_i
// http://www.cellml.org/models/ENa
// alternative: Extracellular Transporter-Sodium Complex
// title: ENa
// http://www.cellml.org/models/Na
// alternative: Extracellular Sodium
// title: Na
// http://www.cellml.org/models/ENaCl_i
// alternative: Intracellular Transporter-Sodium-Chloride Complex
// title: ENaCl_i
