// reference: Given D; Given D; Family Noble; Family Noble; Given S; Given S; Family Noble; Family Noble; Other J; Other J; Given G; Given G; Family Bett; Family Bett; Other C; Other C; Other L; Given Y; Given Y; Family Earm; Family Earm; Other E; Other E; Given W; Given W; Family Ho; Family Ho; Other K; Other K; Given I; Given I; Family So; Family So; Other K; Other S; title The Role of Sodium-Calcium Exchange During the Cardiac Action Potential; volume 639; first_page 334; title Annals of the New York Academy of Sciences; W3CDTF 1991-01-01; last_page 353
// simulation: endingValue 0.001
// simulation: endingValue 1
def model noble_noble_bett_earm_ho_so_1991_version02 as
  // Model Status
  //
  // Version 01 is the original unchecked model imported from the old repository. Version 02 was fixed from Version 01 by James Lawson such that Version 02 runs in PCEnv.
  //
  // Model Structure
  //
  // This model was based on the paper:
  //
  // "The role of sodium-calcium exchange during the cardiac action potential"
  //
  // by Noble D, Noble SJ, Bett GC, Earm YE, Ho WK, So IK
  //
  // Annals of the New York Academy of Sciences 1991;639:334-53.
  //
  // Unfortunately due to the date of publication, electronic access via Blackwell-Synergy is limited for this journal. Documentation for this model is currently pending access to this article in print.
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit per_millivolt_second as
    unit volt {pref: milli, expo: -1};
    unit second {expo: -1};
  enddef;
  def unit arbitary as base unit;
  def unit microsiemens as
    unit siemens {pref: micro};
  enddef;
  def unit nanosiemens_per_cm2 as
    unit siemens {pref: nano};
    unit metre {pref: centi, expo: -2};
  enddef;
  def unit microfarad as
    unit farad {pref: micro};
  enddef;
  def unit nanoamp as
    unit ampere {pref: nano};
  enddef;
  def unit nanoamp_per_millimolar as
    unit ampere {pref: nano};
    unit millimolar {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit millimolar_per_second as
    unit mole {pref: milli};
    unit litre {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit millijoule_per_mole_kelvin as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit millijoule_per_coulomb as
    unit joule {pref: milli};
    unit coulomb {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit cm_per_second as
    unit metre {pref: centi};
    unit second {expo: -1};
  enddef;
  def unit cm2 as
    unit metre {pref: centi, expo: 2};
  enddef;
  def unit microlitre as
    unit litre {pref: micro};
  enddef;
  def unit mole_per_amp_metre_cubed as
    unit mole;
    unit ampere {expo: -1};
    unit metre {expo: -3};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp membrane as
    var V: millivolt {pub: out, init: -93};
    var R: millijoule_per_mole_kelvin {pub: out, init: 8314.472};
    var T: kelvin {pub: out, init: 310};
    var F: coulomb_per_mole {pub: out, init: 96485.3415};
    var Cm: microfarad {init: 9.5e-5};
    var time: second {pub: in};
    var i_K1: nanoamp {pub: in};
    var i_to: nanoamp {pub: in};
    var i_K: nanoamp {pub: in};
    var i_Ca_L_K: nanoamp {pub: in};
    var i_b_K: nanoamp {pub: in};
    var i_NaK: nanoamp {pub: in};
    var i_Na: nanoamp {pub: in};
    var i_b_Na: nanoamp {pub: in};
    var i_Ca_L_Na: nanoamp {pub: in};
    var i_NaCa: nanoamp {pub: in};
    var i_Ca_L_Ca: nanoamp {pub: in};
    var i_b_Ca: nanoamp {pub: in};
    var i_Stim: nanoamp;
    i_Stim = sel
      case (time >= 0.1{second}) and (time <= 0.102{second}):
        -6{nanoamp};
      otherwise:
        0{nanoamp};
    endsel;
    ode(V, time) = -1{dimensionless}/Cm*(i_Stim+i_K1+i_to+i_K+i_b_K+i_NaK+i_Na+i_b_Na+i_Ca_L_Na+i_NaCa+i_Ca_L_Ca+i_Ca_L_K+i_b_Ca);
  enddef;

  def comp reversal_potentials as
    var E_Na: millivolt {pub: out};
    var E_K: millivolt {pub: out};
    var E_Ca: millivolt {pub: out};
    var E_mh: millivolt {pub: out};
    var K_o: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: second {pub: in};
    E_Na = R*T/F*ln(Na_o/Na_i);
    E_K = R*T/F*ln(K_o/K_i);
    E_Ca = 0.5{dimensionless}*R*T/F*ln(Ca_o/Ca_i);
    E_mh = R*T/F*ln((Na_o+0.12{dimensionless}*K_o)/(Na_i+0.12{dimensionless}*K_i));
  enddef;

  def comp time_independent_potassium_current as
    var i_K1: nanoamp {pub: out};
    var K_mk1: millimolar {pub: out, init: 10};
    var g_K1: microsiemens {init: 1};
    var K_o: millimolar {pub: in};
    var V: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: second {pub: in};
    i_K1 = g_K1*K_o/(K_o+K_mk1)*(V-E_K)/(1{dimensionless}+exp((V-E_K-10{millivolt})*F*2{dimensionless}/(R*T)));
  enddef;

  def comp time_dependent_potassium_current as
    var i_K: nanoamp {pub: out};
    var I_K: nanoamp;
    var i_K_max: nanoamp {init: 1};
    var time: second {pub: in, priv: out};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in, priv: out};
    var K_i: millimolar {pub: in};
    var K_o: millimolar {pub: in};
    var x: dimensionless {priv: in};
    I_K = i_K_max*(K_i-K_o*exp(-V*F/(R*T)))/140{millimolar};
    i_K = x*I_K;
  enddef;

  def comp time_dependent_potassium_current_x_gate as
    var x: dimensionless {pub: out, init: 0.001};
    var E0xa: millivolt;
    var E0xb: millivolt;
    var alpha_x: per_second;
    var beta_x: per_second;
    var time: second {pub: in};
    var V: millivolt {pub: in};
    E0xa = V+50{millivolt};
    alpha_x = 0.5{per_second}*exp(0.0826{per_millivolt}*E0xa)/(1{dimensionless}+exp(0.057{per_millivolt}*E0xa));
    E0xb = V+20{millivolt};
    beta_x = 1.3{per_second}*exp(-0.06{per_millivolt}*E0xb)/(1{dimensionless}+exp(-0.04{per_millivolt}*E0xb));
    ode(x, time) = alpha_x*(1{dimensionless}-x)-beta_x*x;
  enddef;

  def comp potassium_background_current as
    var i_b_K: nanoamp {pub: out};
    var g_bk: microsiemens {init: 0.0006};
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    i_b_K = g_bk*(V-E_K);
  enddef;

  def comp fast_sodium_current as
    var i_Na: nanoamp {pub: out};
    var g_Na: microsiemens {init: 2.5};
    var E_mh: millivolt {pub: in};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    i_Na = g_Na*pow(m, 3{dimensionless})*h*(V-E_mh);
  enddef;

  def comp fast_sodium_current_m_gate as
    var m: dimensionless {pub: out, init: 0.000105};
    var alpha_m: per_second;
    var beta_m: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var delta_m: dimensionless {init: 1e-5};
    var E0_m: millivolt;
    E0_m = V+41{millivolt};
    alpha_m = sel
      case abs(E0_m*1{per_millivolt_second}) < delta_m*1{per_second}:
        2000{per_second};
      otherwise:
        200{per_millivolt_second}*E0_m/(1{dimensionless}-exp(-0.1{per_millivolt}*E0_m));
    endsel;
    beta_m = 8000{per_second}*exp(-0.056{per_millivolt}*(V+66{millivolt}));
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  def comp fast_sodium_current_h_gate as
    var h: dimensionless {pub: out, init: 0.99816539};
    var alpha_h: per_second;
    var beta_h: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_h = 20{per_second}*exp(-0.125{per_millivolt}*(V+75{millivolt}));
    beta_h = 2000{per_second}/(1{dimensionless}+320{dimensionless}*exp(-0.1{per_millivolt}*(V+75{millivolt})));
    ode(h, time) = alpha_h*(1{dimensionless}-h)-beta_h*h;
  enddef;

  def comp sodium_background_current as
    var i_b_Na: nanoamp {pub: out};
    var g_bna: microsiemens {init: 0.0006};
    var Na_i: millimolar {pub: in};
    var E_Na: millivolt {pub: in};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    i_b_Na = g_bna*(V-E_Na);
  enddef;

  def comp L_type_Ca_channel as
    var i_Ca_L_Ca: nanoamp {pub: out};
    var i_Ca_L_K: nanoamp {pub: out};
    var i_Ca_L_Na: nanoamp {pub: out};
    var i_Ca_L: nanoamp {pub: out};
    var P_Ca_L: nanoamp_per_millimolar {init: 0.25};
    var P_CaK: nanoamp_per_millimolar {init: 0.002};
    var P_CaNa: nanoamp_per_millimolar {init: 0.01};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in, priv: out};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    i_Ca_L_Ca = 4{dimensionless}*P_Ca_L*d*f*(V-50{millivolt})*F/(R*T)/(1{dimensionless}-exp(-(V-50{millivolt})*F*2{dimensionless}/(R*T)))*(Ca_i*exp(100{millijoule_per_coulomb}*F/(R*T))-Ca_o*exp(-(V-50{millivolt})*F*2{dimensionless}/(R*T)));
    i_Ca_L_K = P_CaK*P_Ca_L*d*f*1{mole_per_amp_metre_cubed}*(V-50{millivolt})*F/(R*T)/(1{dimensionless}-exp(-(V-50{millivolt})*F/(R*T)))*(K_i*exp(50{millijoule_per_coulomb}*F/(R*T))-K_o*exp(-(V-50{millivolt})*F/(R*T)));
    i_Ca_L_Na = P_CaNa*P_Ca_L*d*f*1{mole_per_amp_metre_cubed}*(V-50{millivolt})*F/(R*T)/(1{dimensionless}-exp(-(V-50{millivolt})*F/(R*T)))*(Na_i*exp(50{millijoule_per_coulomb}*F/(R*T))-Na_o*exp(-(V-50{millivolt})*F/(R*T)));
    i_Ca_L = i_Ca_L_Ca+i_Ca_L_K+i_Ca_L_Na;
  enddef;

  def comp L_type_Ca_channel_d_gate as
    var d: dimensionless {pub: out, init: 0};
    var alpha_d: per_second;
    var beta_d: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var E0_d: millivolt;
    var speed_d: dimensionless {init: 3};
    E0_d = V+19{millivolt}-5{millivolt};
    alpha_d = sel
      case abs(E0_d) < 0.0001{millivolt}:
        120{per_second};
      otherwise:
        30{per_millivolt_second}*E0_d/(1{dimensionless}-exp(-E0_d/4{millivolt}));
    endsel;
    beta_d = sel
      case abs(E0_d) < 0.0001{millivolt}:
        120{per_second};
      otherwise:
        12{per_millivolt_second}*E0_d/(exp(E0_d/10{millivolt})-1{dimensionless});
    endsel;
    ode(d, time) = speed_d*(alpha_d*(1{dimensionless}-d)-beta_d*d);
  enddef;

  def comp L_type_Ca_channel_f_gate as
    var f: dimensionless {pub: out, init: 1};
    var alpha_f: per_second;
    var beta_f: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var speed_f: dimensionless {init: 0.5};
    var delta_f: dimensionless {init: 0.0001};
    var E0_f: millivolt;
    E0_f = V+34{millivolt};
    alpha_f = sel
      case abs(E0_f) < delta_f*1{millivolt}:
        25{per_second};
      otherwise:
        6.25{per_millivolt_second}*E0_f/(exp(E0_f/4{millivolt})-1{dimensionless});
    endsel;
    beta_f = 50{per_second}/(1{dimensionless}+exp(-1{dimensionless}*(V+34{millivolt})/4{millivolt}));
    ode(f, time) = speed_f*(alpha_f*(1{dimensionless}-f)-beta_f*f);
  enddef;

  def comp calcium_background_current as
    var i_b_Ca: nanoamp {pub: out};
    var g_bca: microsiemens {init: 0.00025};
    var E_Ca: millivolt {pub: in};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    i_b_Ca = g_bca*(V-E_Ca);
  enddef;

  def comp transient_outward_current as
    var i_to: nanoamp {pub: out};
    var g_to: microsiemens {init: 0.005};
    var g_tos: microsiemens {init: 0};
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in, priv: out};
    var time: second {pub: in, priv: out};
    var s: dimensionless {priv: in};
    var r: dimensionless {priv: in};
    i_to = g_to*(g_tos+s*(1{dimensionless}-g_tos))*r*(V-E_K);
  enddef;

  def comp transient_outward_current_s_gate as
    var s: dimensionless {pub: out, init: 1};
    var alpha_s: per_second;
    var beta_s: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_s = 0.033{per_second}*exp(-V/17{millivolt});
    beta_s = 33{per_second}/(1{dimensionless}+exp(-0.125{dimensionless}*(V+10{millivolt})));
    ode(s, time) = alpha_s*(1{dimensionless}-s)-beta_s*s;
  enddef;

  def comp transient_outward_current_r_gate as
    var r: dimensionless {pub: out, init: 0};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(r, time) = 333{per_second}*(1{dimensionless}/(1{dimensionless}+exp(-(V+4{millivolt})/5{dimensionless}))-r);
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: nanoamp {pub: out};
    var i_NaK_max: nanoamp {init: 0.7};
    var K_mK: millimolar {init: 1};
    var K_mNa: millimolar {init: 40};
    var K_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var time: second {pub: in};
    i_NaK = i_NaK_max*K_o/(K_mK+K_o)*Na_i/(K_mNa+Na_i);
  enddef;

  def comp sodium_calcium_exchanger as
    var i_NaCa: nanoamp {pub: out};
    var k_NaCa: nanoamp {init: 0.0005};
    var n_NaCa: dimensionless {init: 3};
    var d_NaCa: dimensionless {init: 0};
    var gamma: dimensionless {init: 0.5};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    i_NaCa = k_NaCa*(exp(gamma*(n_NaCa-2{dimensionless})*V*F/(R*T))*pow(Na_i, n_NaCa)*Ca_o-exp((gamma-1{dimensionless})*(n_NaCa-2{dimensionless})*V*F/(R*T))*pow(Na_o, n_NaCa)*Ca_i)/((1{dimensionless}+d_NaCa*(Ca_i*pow(Na_o, n_NaCa)+Ca_o*pow(Na_i, n_NaCa)))*(1{dimensionless}+Ca_i/0.0069{millimolar}));
  enddef;

  def comp sarcoplasmic_reticulum_calcium_pump as
    var i_up: millimolar_per_second {pub: out};
    var K_1: per_second;
    var K_2: per_second;
    var K_cyca: millimolar {init: 0.0003};
    var K_xcs: millimolar {init: 0.4};
    var K_srca: millimolar {init: 0.5};
    var alpha_up: per_second {init: 0.4};
    var beta_up: per_second {init: 0.03};
    var Ca_i: millimolar {pub: in};
    var Ca_up: millimolar {pub: in};
    var time: second {pub: in};
    K_1 = K_cyca*K_xcs/K_srca;
    K_2 = Ca_i+Ca_up*K_1+K_cyca*K_xcs+K_cyca;
    i_up = Ca_i/K_2*alpha_up-Ca_up*K_1/K_2*beta_up;
  enddef;

  def comp calcium_translocation as
    var i_trans: millimolar_per_second {pub: out};
    var Ca_rel: millimolar {pub: in};
    var Ca_up: millimolar {pub: in};
    var time: second {pub: in};
    i_trans = 50{per_second}*(Ca_up-Ca_rel);
  enddef;

  def comp calcium_release as
    var i_rel: millimolar_per_second {pub: out};
    var VoltDep: millivolt;
    var RegBindSite: dimensionless;
    var ActRate: per_second;
    var InactRate: per_second;
    var K_leak_rate: per_second {init: 0};
    var K_m_rel: per_second {init: 250};
    var PrecFrac: dimensionless {init: 1};
    var ActFrac: dimensionless {init: 0};
    var ProdFrac: dimensionless {init: 0};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_rel: millimolar {pub: in};
    VoltDep = exp(0.08{dimensionless}*(V-40{millivolt}));
    RegBindSite = sqr(Ca_i/(Ca_i+0.0005{millimolar}));
    ActRate = 500{per_second}*RegBindSite;
    InactRate = 60{per_second}+500{per_second}*RegBindSite;
    ode(PrecFrac, time) = ProdFrac-(1{dimensionless}-ActFrac-ProdFrac)*ActRate;
    ode(ActFrac, time) = PrecFrac*ActRate-ActFrac*InactRate;
    ode(ProdFrac, time) = ActFrac*InactRate-ProdFrac;
    i_rel = (sqr(ActFrac/(ActFrac+0.25{dimensionless}))*K_m_rel+K_leak_rate)*Ca_rel;
  enddef;

  def comp extracellular_sodium_concentration as
    var Na_o: millimolar {pub: out, init: 140};
  enddef;

  def comp intracellular_sodium_concentration as
    var Na_i: millimolar {pub: out, init: 5};
    var V_i: microlitre {pub: in};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Na: nanoamp {pub: in};
    var i_b_Na: nanoamp {pub: in};
    var i_Ca_L_Na: nanoamp {pub: in};
    var i_NaK: nanoamp {pub: in};
    var i_NaCa: nanoamp {pub: in};
    ode(Na_i, time) = -1{dimensionless}/(V_i*F)*(i_Na+i_b_Na+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa+i_Ca_L_Na);
  enddef;

  def comp extracellular_calcium_concentration as
    var Ca_o: millimolar {pub: out, init: 2};
  enddef;

  def comp extracellular_potassium_concentration as
    var K_o: millimolar {pub: out, init: 4};
  enddef;

  def comp intracellular_potassium_concentration as
    var K_i: millimolar {pub: out, init: 140};
    var V_i: microlitre {pub: in};
    var i_K1: nanoamp {pub: in};
    var i_K: nanoamp {pub: in};
    var i_Ca_L_K: nanoamp {pub: in};
    var i_to: nanoamp {pub: in};
    var i_b_K: nanoamp {pub: in};
    var i_NaK: nanoamp {pub: in};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    ode(K_i, time) = -1{dimensionless}/(V_i*F)*(i_K1+i_K+i_Ca_L_K+i_to+i_b_K-2{dimensionless}*i_NaK);
  enddef;

  def comp intracellular_calcium_concentration as
    var Ca_i: millimolar {pub: out, init: 7.63e-6};
    var Ca_up: millimolar {pub: out, init: 0.3013};
    var Ca_rel: millimolar {pub: out, init: 0.2989};
    var Ca_Calmod: millimolar {init: 0.0003};
    var Ca_Trop: millimolar {init: 0.0002};
    var Calmod: millimolar {init: 0.02};
    var Trop: millimolar {init: 0.05};
    var alpha_Calmod: per_second {init: 100000};
    var beta_Calmod: per_second {init: 50};
    var alpha_Trop: per_second {init: 100000};
    var beta_Trop: per_second {init: 200};
    var radius: micrometre {init: 12};
    var length: micrometre {init: 74};
    var V_i: microlitre {pub: out};
    var V_Cell: microlitre;
    var V_i_ratio: dimensionless;
    var V_rel_ratio: dimensionless {init: 0.1};
    var V_e_ratio: dimensionless {init: 0.4};
    var V_up_ratio: dimensionless {init: 0.01};
    var i_up: millimolar_per_second {pub: in};
    var i_trans: millimolar_per_second {pub: in};
    var i_rel: millimolar_per_second {pub: in};
    var i_NaCa: nanoamp {pub: in};
    var i_Ca_L_Ca: nanoamp {pub: in};
    var i_b_Ca: nanoamp {pub: in};
    var F: coulomb_per_mole {pub: in};
    var time: second {pub: in};
    V_Cell = 3.141592654{dimensionless}*sqr(radius/1000{dimensionless})*length/1000{dimensionless};
    V_i_ratio = 1{dimensionless}-V_e_ratio-V_up_ratio-V_rel_ratio;
    V_i = V_Cell*V_i_ratio;
    ode(Ca_i, time) = -1{dimensionless}/2{dimensionless}*V_i*F*(i_Ca_L_Ca+i_b_Ca-2{dimensionless}*i_NaCa)+i_rel*V_rel_ratio/V_i_ratio-dCa_Calmod_dtime-dCa_Trop_dtime-i_up;
    ode(Ca_up, time) = V_i_ratio/V_up_ratio*i_up-i_trans;
    ode(Ca_rel, time) = V_up_ratio/V_rel_ratio*i_trans-i_rel;
    ode(Ca_Calmod, time) = alpha_Calmod*Ca_i*(Calmod-Ca_Calmod)-beta_Calmod*Ca_Calmod;
    ode(Ca_Trop, time) = alpha_Trop*Ca_i*(Trop-Ca_Trop)-beta_Trop*Ca_Trop;
    dCa_Calmod_dtime = alpha_Calmod*Ca_i*(Calmod-Ca_Calmod)-beta_Calmod*Ca_Calmod;
    dCa_Trop_dtime = alpha_Trop*Ca_i*(Trop-Ca_Trop)-beta_Trop*Ca_Trop;
    var dCa_Calmod_dtime: millimolar_per_second;
    var dCa_Trop_dtime: millimolar_per_second;
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
      endcomp;
      comp L_type_Ca_channel incl
        comp L_type_Ca_channel_d_gate;
        comp L_type_Ca_channel_f_gate;
      endcomp;
      comp time_dependent_potassium_current incl
        comp time_dependent_potassium_current_x_gate;
      endcomp;
      comp potassium_background_current;
      comp time_independent_potassium_current;
      comp sodium_background_current;
      comp calcium_background_current;
      comp transient_outward_current incl
        comp transient_outward_current_s_gate;
        comp transient_outward_current_r_gate;
      endcomp;
      comp sodium_potassium_pump;
      comp sodium_calcium_exchanger;
      comp sarcoplasmic_reticulum_calcium_pump;
      comp calcium_translocation;
      comp calcium_release;
      comp extracellular_sodium_concentration;
      comp intracellular_sodium_concentration;
      comp extracellular_potassium_concentration;
      comp intracellular_potassium_concentration;
      comp extracellular_calcium_concentration;
      comp intracellular_calcium_concentration;
      comp reversal_potentials;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_gate;
      comp L_type_Ca_channel_f_gate;
    endcomp;
    comp transient_outward_current incl
      comp transient_outward_current_s_gate;
      comp transient_outward_current_r_gate;
    endcomp;
    comp time_dependent_potassium_current incl
      comp time_dependent_potassium_current_x_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between reversal_potentials and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between potassium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between sodium_calcium_exchanger and environment for
    vars time and time;
  enddef;
  def map between intracellular_sodium_concentration and environment for
    vars time and time;
  enddef;
  def map between intracellular_potassium_concentration and environment for
    vars time and time;
  enddef;
  def map between intracellular_calcium_concentration and environment for
    vars time and time;
  enddef;
  def map between sarcoplasmic_reticulum_calcium_pump and environment for
    vars time and time;
  enddef;
  def map between calcium_translocation and environment for
    vars time and time;
  enddef;
  def map between calcium_release and environment for
    vars time and time;
  enddef;
  def map between calcium_release and membrane for
    vars V and V;
  enddef;
  def map between membrane and reversal_potentials for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L_Ca and i_Ca_L_Ca;
    vars i_Ca_L_Na and i_Ca_L_Na;
    vars i_Ca_L_K and i_Ca_L_K;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and time_dependent_potassium_current for
    vars V and V;
    vars i_K and i_K;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and transient_outward_current for
    vars V and V;
    vars i_to and i_to;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_b_Na and i_b_Na;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between membrane and potassium_background_current for
    vars V and V;
    vars i_b_K and i_b_K;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars i_NaK and i_NaK;
  enddef;
  def map between membrane and sodium_calcium_exchanger for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and intracellular_sodium_concentration for
    vars F and F;
  enddef;
  def map between membrane and intracellular_potassium_concentration for
    vars F and F;
  enddef;
  def map between membrane and intracellular_calcium_concentration for
    vars F and F;
  enddef;
  def map between reversal_potentials and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and potassium_background_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and transient_outward_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and calcium_background_current for
    vars E_Ca and E_Ca;
  enddef;
  def map between reversal_potentials and fast_sodium_current for
    vars E_mh and E_mh;
  enddef;
  def map between reversal_potentials and extracellular_potassium_concentration for
    vars K_o and K_o;
  enddef;
  def map between reversal_potentials and extracellular_sodium_concentration for
    vars Na_o and Na_o;
  enddef;
  def map between reversal_potentials and intracellular_potassium_concentration for
    vars K_i and K_i;
  enddef;
  def map between reversal_potentials and intracellular_sodium_concentration for
    vars Na_i and Na_i;
  enddef;
  def map between reversal_potentials and extracellular_calcium_concentration for
    vars Ca_o and Ca_o;
  enddef;
  def map between reversal_potentials and intracellular_calcium_concentration for
    vars Ca_i and Ca_i;
  enddef;
  def map between time_independent_potassium_current and extracellular_potassium_concentration for
    vars K_o and K_o;
  enddef;
  def map between time_independent_potassium_current and intracellular_potassium_concentration for
    vars i_K1 and i_K1;
  enddef;
  def map between time_dependent_potassium_current and intracellular_potassium_concentration for
    vars i_K and i_K;
    vars K_i and K_i;
  enddef;
  def map between time_dependent_potassium_current and extracellular_potassium_concentration for
    vars K_o and K_o;
  enddef;
  def map between potassium_background_current and intracellular_potassium_concentration for
    vars i_b_K and i_b_K;
  enddef;
  def map between fast_sodium_current and intracellular_sodium_concentration for
    vars i_Na and i_Na;
  enddef;
  def map between sodium_background_current and intracellular_sodium_concentration for
    vars i_b_Na and i_b_Na;
    vars Na_i and Na_i;
  enddef;
  def map between L_type_Ca_channel and intracellular_sodium_concentration for
    vars i_Ca_L_Na and i_Ca_L_Na;
    vars Na_i and Na_i;
  enddef;
  def map between L_type_Ca_channel and intracellular_calcium_concentration for
    vars i_Ca_L_Ca and i_Ca_L_Ca;
    vars Ca_i and Ca_i;
  enddef;
  def map between L_type_Ca_channel and intracellular_potassium_concentration for
    vars i_Ca_L_K and i_Ca_L_K;
    vars K_i and K_i;
  enddef;
  def map between L_type_Ca_channel and extracellular_potassium_concentration for
    vars K_o and K_o;
  enddef;
  def map between L_type_Ca_channel and extracellular_sodium_concentration for
    vars Na_o and Na_o;
  enddef;
  def map between L_type_Ca_channel and extracellular_calcium_concentration for
    vars Ca_o and Ca_o;
  enddef;
  def map between calcium_background_current and intracellular_calcium_concentration for
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between sodium_potassium_pump and intracellular_sodium_concentration for
    vars i_NaK and i_NaK;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_potassium_pump and extracellular_potassium_concentration for
    vars K_o and K_o;
  enddef;
  def map between sodium_potassium_pump and intracellular_potassium_concentration for
    vars i_NaK and i_NaK;
  enddef;
  def map between transient_outward_current and intracellular_potassium_concentration for
    vars i_to and i_to;
  enddef;
  def map between sodium_calcium_exchanger and intracellular_calcium_concentration for
    vars i_NaCa and i_NaCa;
    vars Ca_i and Ca_i;
  enddef;
  def map between sodium_calcium_exchanger and intracellular_sodium_concentration for
    vars i_NaCa and i_NaCa;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_calcium_exchanger and extracellular_sodium_concentration for
    vars Na_o and Na_o;
  enddef;
  def map between sodium_calcium_exchanger and extracellular_calcium_concentration for
    vars Ca_o and Ca_o;
  enddef;
  def map between sarcoplasmic_reticulum_calcium_pump and intracellular_calcium_concentration for
    vars i_up and i_up;
    vars Ca_i and Ca_i;
    vars Ca_up and Ca_up;
  enddef;
  def map between calcium_translocation and intracellular_calcium_concentration for
    vars i_trans and i_trans;
    vars Ca_rel and Ca_rel;
    vars Ca_up and Ca_up;
  enddef;
  def map between calcium_release and intracellular_calcium_concentration for
    vars i_rel and i_rel;
    vars Ca_rel and Ca_rel;
    vars Ca_i and Ca_i;
  enddef;
  def map between time_dependent_potassium_current and time_dependent_potassium_current_x_gate for
    vars x and x;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_s_gate for
    vars s and s;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between intracellular_sodium_concentration and intracellular_calcium_concentration for
    vars V_i and V_i;
  enddef;
  def map between intracellular_potassium_concentration and intracellular_calcium_concentration for
    vars V_i and V_i;
  enddef;
enddef;
// #file:///people/jlaw060/Desktop/trial.cellml#rdf:#citationAuthorsSeq
// rdf:#6ca1e3f4-f151-40d1-b841-d2c885a7c2d0
// value: unknown
// rdf:#18a4da12-c33d-4aa8-90a9-e90b1493ceff
// Given: Peter
// Family: Villiger
// Other: J
// http://www.cellml.org/models/noble_noble_bett_earm_ho_so_1991_version01
// modification: W3CDTF 2006-03-31; added metadata
// created: W3CDTF 2007-03-22
// creator: Orgname unknown; Orgunit unknown; Given unknown; Family unknown; Other unknown
